PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo Project Task 2
  keyboardBackend = ioHub
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Routines
  Routine Task
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
    PolygonComponent memory_sample
      fillColor = green
      lineColor = green
      shape = triangle
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      units = pix
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [time (s)] = 3.0
      units = pix
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    PolygonComponent Line1
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100,10)
      startVal [time (s)] = 3.0
      units = pix
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    PolygonComponent Line2
      fillColor [set every repeat] = $Color
      lineColor [set every repeat] = $Color
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100,10)
      startVal [time (s)] = 3.0
      units = pix
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    PolygonComponent Line3
      fillColor = 1.0000, 0.5059, 0.5922
      lineColor = 1.0000, 0.5059, 0.5922
      ori [set every repeat] = tilt
      pos = (50, 0)
      shape = rectangle
      size = (100,10)
      startVal [time (s)] = 3.0
      units = pix
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    PolygonComponent Line4
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100,10)
      startVal [time (s)] = 3.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'up','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions File_Solo Project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Color': 'white'},
      {'Color': 'white'},
      {'Color': 'white'},
      {'Color': 'white'},
      {'Color': 'white'},
      {'Color': 'green'},
      {'Color': 'green'},
      {'Color': 'green'},
      {'Color': 'green'},
      {'Color': 'green'}]
    Routine Task
  LoopTerminator trials
